PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'gender': u'', u'age': u'', u'handedness': u'', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = ColourTesting
  Screen = 1
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Routines
  Routine Instructions2
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the 2-back test. You will have to press space if you decide the  coloured square two trials ago was the same as the current one.

        Please press space only when you decide the coloured square was repeated. Press space to begin.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instructions3
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the 3-back test. You will have to press space if you decide the  coloured square three trials ago was the same as the current one.

        Please press space only when you decide the coloured square was repeated. Press space to begin.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Fixation
    TextComponent Fix
      color [set every repeat] = white
      text [set every repeat] = +
      stopVal [duration (s)] = 1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
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  Routine Welcome
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Hello and welcome to the cognitive task. This is an n-back memory task
        You will be asked to pay attention to a sequence of coloured squares
        and decide whether you saw the same square n times ago.
        There 3 blocks with 3 different rules.  We will inform you about the new rule.
        Press space to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent text_2
      text = It's now time for a short break. When you are ready to continue please press space. 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    PolygonComponent polygon
      opacity [set every repeat] = 1
      fillColor [set every repeat] = $colourtest
      stopVal [duration (s)] = 2
      pos [set every repeat] = (0, 0)
      lineWidth [set every repeat] = 1
      lineColor [set every repeat] = $colourtest
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      size [set every repeat] = (0.20,0.35)
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    KeyboardComponent key_resp_3
      correctAns = $corresp
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Thanks
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for participanting in the experiment.
        The experimenter will be with you shortly.
  Routine Instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the 1-back test. You will have to press space if you decide the previous coloured square was the same as the current one.

        Please press space only when you decide the coloured square was repeated. Press space to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator Block1_1back loopType="TrialHandler"
    conditionsFile = ColourTest1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': ['space'], 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Yellow'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': ['space'], 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': ['space'], 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': ['space'], 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': ['space'], 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Yellow'},
      {'corresp': ['space'], 'colourtest': u'Yellow'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': ['space'], 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': ['space'], 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': ['space'], 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': ['space'], 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Cyan'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block1_1back
  Routine Break
  Routine Instructions2
  LoopInitiator Block2_2back loopType="TrialHandler"
    conditionsFile = ColourTest2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': ['space'], 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': ['space'], 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': ['space'], 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': ['space'], 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Yellow'},
      {'corresp': ['space'], 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': ['space'], 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Yellow'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': ['space'], 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': ['space'], 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': ['space'], 'colourtest': u'Yellow'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': ['space'], 'colourtest': u'Blue'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block2_2back
  Routine Break
  Routine Instructions3
  LoopInitiator Block3_3back loopType="TrialHandler"
    conditionsFile = ColourTest3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': ['space'], 'colourtest': u'Blue'},
      {'corresp': ['space'], 'colourtest': u'Red'},
      {'corresp': ['space'], 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': ['space'], 'colourtest': u'White'},
      {'corresp': ['space'], 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': ['space'], 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': ['space'], 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Yellow'},
      {'corresp': None, 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Magenta'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': ['space'], 'colourtest': u'White'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Red'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': ['space'], 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Green'},
      {'corresp': None, 'colourtest': u'Cyan'},
      {'corresp': None, 'colourtest': u'Blue'},
      {'corresp': None, 'colourtest': u'Green'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block3_3back
  Routine Thanks
